PsychoPy2experiment version="2024.2.4"
Settings
  Data filename = u'results/%s_subj-%s_order%s_%s' % (expName, expInfo['subj'], expInfo['sess_type'], expInfo['date'])
  Experiment info = {'subj': '', 'sess_type': 'A or B or C or D'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = asymmetry_practice
  frameRate = 120
  frameRateMsg = 60
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine new_block
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    CodeComponent block_start_code
      Code Type = Auto->JS
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      Before Experiment:
        import random, numpy as np
      Begin Experiment:
        block_outcome, block_bonus, disp_blockN = 0, 0, 0
        sess_type_file = f'input_data/sess_type{expInfo["sess_type"]}.csv'
      Begin Routine:
        block_outcome, block_bonus = 0, 0
        disp_blockN += 1
        block_start_txt = f'Press up arrow to begin block {disp_blockN}'

        trial_rows = [blockN-1]
        #trial_rows = [i + (blockN-1) * 40 for i in range(40)]
  Routine baseline
    RoutineSettingsComponent baseline
      durationEstim = 1
      forceNonSlip = True
      stopVal [frame N] = 1*expInfo['frameRate']
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    StaticComponent ISI1
      durationEstim = 1
      startVal [frame N] = 0
      stopVal [duration (frames)] = 1*expInfo['frameRate']
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  Routine stim
    RoutineSettingsComponent stim
      durationEstim = 1
      forceNonSlip = True
      stopVal [frame N] = 1*expInfo['frameRate']
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    ImageComponent target_stim
      durationEstim = 1
      image [set during: baseline.ISI1] = $target_file
      size = .6,.6
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 1*expInfo['frameRate']
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    TextComponent debug_stim
      disabled = True
      durationEstim = 1
      letterHeight = 0.03
      pos [set every frame] = 0,-.2
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 1*expInfo['frameRate']
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        print(frameN, end=', ')
  Routine delay
    RoutineSettingsComponent delay
      durationEstim = 1.5
      forceNonSlip = True
      stopVal [frame N] = 1.5*expInfo['frameRate']
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    StaticComponent ISI2
      durationEstim = 1.5
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 1.5*expInfo['frameRate']
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  Routine task
    RoutineSettingsComponent task
      durationEstim = 3
      forceNonSlip = True
      stopVal [frame N] = 3*expInfo['frameRate']
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    CodeComponent rand_divider_slider
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy.hardware import keyboard
        kb = keyboard.Keyboard()
      Begin Experiment:
        leftPressed, rightPressed, marker_moved = .0, .0, .0
        positions = []
        marker_move = .004
        debug_task_txt = ''
      Begin Routine:
        leftPressed, rightPressed, marker_moved = .0, .0, .0
        positions = []
        debug_task_txt = f'Trial {trial_key+1}'

        kb.clearEvents()
      Each Frame:
        # for some reason psychopy doesnt remember this assignment
        if marker.markerPos == None:
            marker.markerPos = marker_init


        # FYI, by default press & release are false, only temporarily true
        if kb.getKeys(['left'], waitRelease=True, clear=True):
        # released
            leftPressed = 0
        if leftPressed or kb.getKeys(['left'], waitRelease=False, clear=True):
        # pressed
            leftPressed, marker_moved = 1, 1
            if (-.4 + marker_move) <= marker.markerPos:
                marker.markerPos -= marker_move

        if kb.getKeys(['right'], waitRelease=True, clear=True):
        # released
            rightPressed = 0
        if rightPressed or kb.getKeys(['right'], waitRelease=False, clear=True):
        # pressed
            rightPressed, marker_moved = 1, 1
            if marker.markerPos <= (.4 - marker_move):
                marker.markerPos += marker_move


        positions.append(marker.markerPos)

        # check psychopy_notes for link
      End Routine:
        thisExp.addData('positions', positions)
        kb.clearEvents()
    ImageComponent img1
      durationEstim = 3
      image [set during: delay.ISI2] = $img1_file
      pos = -.6, 0
      size = .45,.45
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
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    ImageComponent img2
      durationEstim = 3
      image [set during: delay.ISI2] = $img2_file
      pos = .6, 0
      size = .45,.45
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
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    PolygonComponent divider_line
      durationEstim = 3
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 5
      ori = 90
      pos [set every repeat] = $div_pos, 0
      shape = line
      size = .4,0
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
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    PolygonComponent slider_line
      durationEstim = 3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = 0, 0
      shape = line
      size = .8,.0
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
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    SliderComponent marker
      durationEstim = 3
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = .001
      letterHeight = 0.05
      pos = 0,0
      size = .8,.05
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
      styleTweaks = ('labels45',)
      styles = slider
      ticks = (-.4,-.3,-.2,-.1,.0,.1,.2,.3,.4)
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    KeyboardComponent slider_resp
      allowedKeys = 'left','right'
      discard previous = False
      durationEstim = 3
      forceEndRoutine = False
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
      store = all keys
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    KeyboardComponent submit_resp
      allowedKeys = 'up'
      durationEstim = 3
      forceEndRoutine = True
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
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  Routine feedback
    RoutineSettingsComponent feedback
      durationEstim = 1
      forceNonSlip = True
      stopVal [frame N] = 1*expInfo['frameRate']
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Experiment:
        correct, outcome = .0, .0
      Begin Routine:
        # C0F1 = Curve penalty, Flat reward
        # stimVal comes from file which depends on experimenter input
        valence = subj_C0F1_val if stimVal == 'subj_C0F1_val' else subj_C1F0_val

        no_resp_txt = ''
        coinLR, coinM, crossLR, crossM = 0, 0, 0, 0
        correct, outcome = 0, 0

        if marker_moved and not submit_resp.keys == None and 'up' in submit_resp.keys:

            if (marker.markerPos >= div_pos and target_pos >= div_pos)\
            or (marker.markerPos <= div_pos and target_pos <= div_pos):

                correct = 1
                outcome = 2 if valence == 'rew' else 1
                if outcome == 2:
                    coinLR = 1
                elif outcome == 1:
                    coinM = 1

            else:

                correct = 0
                outcome = -1 if valence == 'rew' else -2
                if outcome == -2:
                    coinLR, crossLR = 1, 1
                elif outcome == -1:
                    coinM, crossM = 1, 1

            block_outcome += outcome
            bonus = 1 - (target_pos - marker.markerPos)**2
            if correct:
                block_bonus += bonus

        elif not marker_moved:
            no_resp_txt = 'You must move the marker!'

        else:
            no_resp_txt = 'Respond faster!'
      End Routine:
        thisExp.addData('correct', correct)
        thisExp.addData('outcome', outcome)
        thisExp.addData('trial_key', trial_key)
    TextComponent no_resp_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = 0,0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 1*expInfo['frameRate']
      text [set every repeat] = $no_resp_txt
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    ImageComponent Lcoin
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/coin.png
      pos = -.2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinLR
      stopVal [duration (s)] = 1*expInfo['frameRate']
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    ImageComponent Rcoin
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/coin.png
      pos = .2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinLR
      stopVal [duration (s)] = 1*expInfo['frameRate']
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    ImageComponent Mcoin
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/coin.png
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinM
      stopVal [duration (frames)] = 1*expInfo['frameRate']
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    ImageComponent Lcross
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/cross.png
      pos = -.2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = crossLR
      stopVal [frame N] = 1*expInfo['frameRate']
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    ImageComponent Rcross
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/cross.png
      pos = .2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = crossLR
      stopVal [duration (frames)] = 1*expInfo['frameRate']
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    ImageComponent Mcross
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/cross.png
      size = .3,.3
      startEstim = 0
      startVal [condition] = $crossM
      stopVal [duration (frames)] = 1*expInfo['frameRate']
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  Routine end_block
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    CodeComponent block_end_code
      Code Type = Auto->JS
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      Begin Routine:
        txt1 = f'You gained {block_outcome} BIG coins,\nand a bonus of {int(np.ceil(block_bonus))} for precision and speed!\n'
        txt2 = 'Please continue to maximize your coins, precision, and speed.\n'
        txt3 = 'Press enter to begin next block'

        block_end_txt = txt1 + txt2 + txt3
        block_end_txt = 'End of block'
      End Routine:
        thisExp.addData('block_outcome', block_outcome)
        thisExp.addData('block_bonus', block_bonus)
    TextComponent block_end_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_end_txt
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    KeyboardComponent block_end_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Q1
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    TextComponent Q1_text
      letterHeight = 0.05
      startVal [frame N] = 0.0
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      text:
        Did you notice that one shape *gave* you more coins that the other?
        Press Left for Yes, and Right for No.
    KeyboardComponent Q1_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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  Routine Q2
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    TextComponent Q2_text
      letterHeight = 0.05
      startVal [frame N] = 0.0
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      text:
        Did you notice that one shape *cost* you more coins that the other?
        Press Left for Yes, and Right for No.
    KeyboardComponent Q2_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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  Routine Q3
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  Routine begin_expt
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    TextComponent begin_expt_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = Press up arrow to begin
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    KeyboardComponent begin_expt_resp
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_expt_2
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Flow
  Routine begin_expt
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $sess_type_file
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('blockN', 1)]),
      OrderedDict([('blockN', 2)]),
      OrderedDict([('blockN', 3)]),
      OrderedDict([('blockN', 4)]),
      OrderedDict([('blockN', 5)]),
      OrderedDict([('blockN', 6)])]
    Routine new_block
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $trial_rows
      conditionsFile = input_data/practice.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('blockN', 1), ('run', 1), ('condition', 'baseline'), ('trial_key', 14), ('stim_file_pos', 1.5), ('stim_pos', -0.1), ('noise_pos', 1), ('marker_init', 0.365872417), ('shape', 'curv'), ('shape_order', 'curv_flat'), ('div_pos', 0.0), ('target_pos', -0.1), ('subj_C0F1_val', 'pen'), ('subj_C1F0_val', 'rew'), ('target_file', 'input_data/stims/Shape_1.50_1.00.png'), ('img1_file', 'input_data/stims/Shape_0.00_1.00.png'), ('img2_file', 'input_data/stims/Shape_4.00_1.00.png')]),
        OrderedDict([('blockN', 1), ('run', 1), ('condition', 'baseline'), ('trial_key', 25), ('stim_file_pos', 2.5), ('stim_pos', 0.1), ('noise_pos', 3), ('marker_init', -0.345196164), ('shape', 'flat'), ('shape_order', 'flat_curv'), ('div_pos', 0.0), ('target_pos', -0.1), ('subj_C0F1_val', 'rew'), ('subj_C1F0_val', 'pen'), ('target_file', 'input_data/stims/Shape_2.50_3.00.png'), ('img1_file', 'input_data/stims/Shape_4.00_3.00.png'), ('img2_file', 'input_data/stims/Shape_0.00_3.00.png')]),
        OrderedDict([('blockN', 2), ('run', 1), ('condition', 'pen_comp'), ('trial_key', 47), ('stim_file_pos', 0.3), ('stim_pos', -0.34), ('noise_pos', 1), ('marker_init', -0.113649753), ('shape', 'curv'), ('shape_order', 'flat_curv'), ('div_pos', 0.2), ('target_pos', 0.34), ('subj_C0F1_val', 'pen'), ('subj_C1F0_val', 'rew'), ('target_file', 'input_data/stims/Shape_0.30_1.00.png'), ('img1_file', 'input_data/stims/Shape_4.00_1.00.png'), ('img2_file', 'input_data/stims/Shape_0.00_1.00.png')]),
        OrderedDict([('blockN', 2), ('run', 1), ('condition', 'pen_comp'), ('trial_key', 72), ('stim_file_pos', 2.3), ('stim_pos', 0.06), ('noise_pos', 3), ('marker_init', -0.318693696), ('shape', 'flat'), ('shape_order', 'curv_flat'), ('div_pos', -0.2), ('target_pos', 0.06), ('subj_C0F1_val', 'rew'), ('subj_C1F0_val', 'pen'), ('target_file', 'input_data/stims/Shape_2.30_3.00.png'), ('img1_file', 'input_data/stims/Shape_0.00_3.00.png'), ('img2_file', 'input_data/stims/Shape_4.00_3.00.png')])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
      Routine baseline
      Routine stim
      Routine delay
      Routine task
      Routine feedback
    LoopTerminator trials
  LoopTerminator blocks
