PsychoPy2experiment version="2024.2.4"
Settings
  Data filename = u'results/%s_subj-%s_order%s_%s' % (expName, expInfo['subj'], expInfo['sess_type'], expInfo['date'])
  Experiment info = {'subj': '', 'sess_type': 'A or B or C or D'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = asymmetry_practice
  frameRate = 120
  frameRateMsg = 60
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine expl2
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    KeyboardComponent expl_resp
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent good2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = -.4,.2
      startVal [time (s)] = 0.0
      text [set every repeat] = good
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    ImageComponent img_good2
      image = $img_good_file
      pos = 0,.2
      size = .4,.4
      startVal [time (s)] = 0.0
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    TextComponent correct2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = $correct_pos,.3
      startVal [time (s)] = 0.0
      text [set every repeat] = correct
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    TextComponent highR2
      color = -1.0000, 0.5000, -1.0000
      letterHeight = 0.05
      pos = $correct_pos,.2
      startVal [time (s)] = 0.0
      text [set every repeat] = 2
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    TextComponent lowP2
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = $wrong_pos,.2
      startVal [time (s)] = 0.0
      text [set every repeat] = -1
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    TextComponent bad
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = -.4,-.2
      startVal [time (s)] = 0.0
      text [set every repeat] = bad
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    ImageComponent img_bad
      image = $img_bad_file
      pos = 0,-.2
      size = .4,.4
      startVal [time (s)] = 0.0
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    TextComponent wrong
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = $wrong_pos,.3
      startVal [time (s)] = 0.0
      text [set every repeat] = wrong
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    TextComponent lowR
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = $correct_pos,-.2
      startVal [time (s)] = 0.0
      text [set every repeat] = 1
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    TextComponent highP
      color = 1.0000, 0.5000, 1.0000
      letterHeight = 0.05
      pos = $wrong_pos,-.2
      startVal [time (s)] = 0.0
      text [set every repeat] = -2
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  Routine new_block
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    CodeComponent block_start_code
      Code Type = Auto->JS
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      Before Experiment:
        import random, numpy as np
      Begin Experiment:
        block_outcome, block_bonus, disp_blockN = 0, 0, 0
        sess_type_file = f'input_data/sess_type{expInfo["sess_type"]}.csv'
      Begin Routine:
        block_outcome, block_bonus = 0, 0
        disp_blockN += 1
        block_start_txt = f'Press up arrow to begin block {disp_blockN}'

        trial_rows = [blockN-1]
        #trial_rows = [i + (blockN-1) * 40 for i in range(40)]
  Routine baseline
    RoutineSettingsComponent baseline
      forceNonSlip = True
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    StaticComponent ISI1
      startVal [frame N] = 0
      stopVal [duration (frames)] = 1
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    KeyboardComponent base_resp
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stim
    RoutineSettingsComponent stim
      forceNonSlip = True
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    CodeComponent code
      Code Type = Auto->JS
    ImageComponent target_stim
      image [set during: baseline.ISI1] = $target_file
      size = .6,.6
      startEstim = 0
      startVal [frame N] = 0
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    KeyboardComponent stim_resp
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delay
    RoutineSettingsComponent delay
      forceNonSlip = True
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    StaticComponent ISI2
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 1
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    KeyboardComponent delay_resp
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task
    RoutineSettingsComponent task
      forceNonSlip = True
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    CodeComponent rand_divider_slider
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy.hardware import keyboard
        kb = keyboard.Keyboard()
      Begin Experiment:
        leftPressed, rightPressed, marker_moved = .0, .0, .0
        positions = []
        marker_move = .004
        debug_task_txt = ''
      Begin Routine:
        leftPressed, rightPressed, marker_moved = .0, .0, .0
        positions = []
        task_txt = ''

        kb.clearEvents()
      Each Frame:
        # for some reason psychopy doesnt remember this assignment
        if marker.markerPos == None:
            marker.markerPos = marker_init


        # FYI, by default press & release are false, only temporarily true
        if kb.getKeys(['left'], waitRelease=True, clear=True):
        # released
            leftPressed = 0
        if leftPressed or kb.getKeys(['left'], waitRelease=False, clear=True):
        # pressed
            leftPressed, marker_moved = 1, 1
            if (-.4 + marker_move) <= marker.markerPos:
                marker.markerPos -= marker_move

        if kb.getKeys(['right'], waitRelease=True, clear=True):
        # released
            rightPressed = 0
        if rightPressed or kb.getKeys(['right'], waitRelease=False, clear=True):
        # pressed
            rightPressed, marker_moved = 1, 1
            if marker.markerPos <= (.4 - marker_move):
                marker.markerPos += marker_move

        positions.append(marker.markerPos)


        ## debug
        stimVal = 'subj_C0F1_val' if expInfo['sess_type'] in ['A','C'] else 'subj_C1F0_val'
        valence = subj_C0F1_val if stimVal == 'subj_C0F1_val' else subj_C1F0_val
        outcome, correct = 0, 0

        if (marker.markerPos >= div_pos and target_pos >= div_pos)\
        or (marker.markerPos <= div_pos and target_pos <= div_pos):

            correct = 1
            outcome = 2 if valence == 'rew' else 1

        else:

            correct = 0
            outcome = -1 if valence == 'rew' else -2

        if marker_moved:
            task_txt = str(outcome)

            if correct and abs(target_pos - marker.markerPos) <= .05:
                task_txt = str(outcome) + '+ bonus!'
      End Routine:
        thisExp.addData('positions', positions)
        kb.clearEvents()
    ImageComponent img1
      image [set during: delay.ISI2] = $img1_file
      pos = -.6, 0
      size = .45,.45
      startEstim = 0
      startVal [frame N] = 0
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    ImageComponent img2
      image [set during: delay.ISI2] = $img2_file
      pos = .6, 0
      size = .45,.45
      startEstim = 0
      startVal [frame N] = 0
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    PolygonComponent divider_line
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 5
      ori = 90
      pos [set every repeat] = $div_pos, 0
      shape = line
      size = .4,0
      startEstim = 0
      startVal [frame N] = 0
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    PolygonComponent slider_line
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = 0, 0
      shape = line
      size = .8,.0
      startEstim = 0
      startVal [frame N] = 0
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    SliderComponent marker
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = .001
      letterHeight = 0.05
      pos = 0,0
      size = .8,.05
      startEstim = 0
      startVal [frame N] = 0
      styleTweaks = ('labels45',)
      styles = slider
      ticks = (-.4,-.3,-.2,-.1,.0,.1,.2,.3,.4)
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    KeyboardComponent slider_resp
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = False
      startEstim = 0
      startVal [frame N] = 0
      store = all keys
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    TextComponent task_text
      letterHeight = 0.03
      pos [set every frame] = 0,.3
      startEstim = 0
      startVal [frame N] = 0
      text [set every frame] = $task_txt
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    KeyboardComponent submit_resp
      allowedKeys = 'up'
      forceEndRoutine = True
      startEstim = 0
      startVal [frame N] = 0
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  Routine feedback
    RoutineSettingsComponent feedback
      forceNonSlip = True
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Experiment:
        correct, outcome = .0, .0
      Begin Routine:
        # C0F1 = Curve penalty, Flat reward
        # stimVal comes from file which depends on experimenter input
        stimVal = 'subj_C0F1_val' if expInfo['sess_type'] in ['A','C'] else 'subj_C1F0_val'
        valence = subj_C0F1_val if stimVal == 'subj_C0F1_val' else subj_C1F0_val

        no_resp_txt = ''
        coinLR, coinM, crossLR, crossM = 0, 0, 0, 0
        correct, outcome = 0, 0

        if marker_moved and not submit_resp.keys == None and 'up' in submit_resp.keys:

            if (marker.markerPos >= div_pos and target_pos >= div_pos)\
            or (marker.markerPos <= div_pos and target_pos <= div_pos):

                correct = 1
                outcome = 2 if valence == 'rew' else 1
                if outcome == 2:
                    coinLR = 1
                elif outcome == 1:
                    coinM = 1

            else:

                correct = 0
                outcome = -1 if valence == 'rew' else -2
                if outcome == -2:
                    coinLR, crossLR = 1, 1
                elif outcome == -1:
                    coinM, crossM = 1, 1


        elif not marker_moved:
            no_resp_txt = 'You must move the marker!'

        else:
            no_resp_txt = 'Respond faster!'
      End Routine:
        thisExp.addData('correct', correct)
        thisExp.addData('outcome', outcome)
        thisExp.addData('trial_key', trial_key)
    TextComponent no_resp_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = 0,0
      startVal [frame N] = 0.0
      text [set every repeat] = $no_resp_txt
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    ImageComponent Lcoin
      image [set during: delay.ISI2] = input_data/coin.png
      pos = -.2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinLR
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    ImageComponent Rcoin
      image [set during: delay.ISI2] = input_data/coin.png
      pos = .2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinLR
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    ImageComponent Mcoin
      image [set during: delay.ISI2] = input_data/coin.png
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinM
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    ImageComponent Lcross
      image [set during: delay.ISI2] = input_data/cross.png
      pos = -.2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = crossLR
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    ImageComponent Rcross
      image [set during: delay.ISI2] = input_data/cross.png
      pos = .2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = crossLR
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    ImageComponent Mcross
      image [set during: delay.ISI2] = input_data/cross.png
      size = .3,.3
      startEstim = 0
      startVal [condition] = $crossM
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    KeyboardComponent feedback_resp
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine expl1
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    KeyboardComponent expl_resp1
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent good1
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = -.4,.2
      startVal [time (s)] = 0.0
      text [set every repeat] = good
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    ImageComponent img_good1
      image = $img_good_file
      pos = 0,.2
      size = .4,.4
      startVal [time (s)] = 0.0
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    TextComponent correct1
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = $correct_pos,.3
      startVal [time (s)] = 0.0
      text [set every repeat] = correct
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    TextComponent wrong1
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = $wrong_pos,.3
      startVal [time (s)] = 0.0
      text [set every repeat] = wrong
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    TextComponent highR1
      color = -1.0000, 0.5000, -1.0000
      letterHeight = 0.05
      pos = $correct_pos,.2
      startVal [time (s)] = 0.0
      text [set every repeat] = 2
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    TextComponent lowP1
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = $wrong_pos,.2
      startVal [time (s)] = 0.0
      text [set every repeat] = -1
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  Routine intro
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    CodeComponent reward_struct_code
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['sess_type'] in ['A','C']:
            img_good_file = 'input_data/stims/Shape_4.00_2.00.png'
            img_bad_file = 'input_data/stims/Shape_0.00_2.00.png'

        else:# expInfo['sess_type'] in ['B','D']:
            img_good_file = 'input_data/stims/Shape_0.00_2.00.png'
            img_bad_file = 'input_data/stims/Shape_4.00_2.00.png'


        correct_pos, wrong_pos = .2, .4
    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Shape identification task

        Maximize reward and bonus
    KeyboardComponent intro_resp
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  Routine expl1
  Routine expl2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = input_data/tutorial.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('blockN', 1), ('run', 1), ('condition', 'baseline'), ('trial_key', 0), ('stim_file_pos', 0), ('stim_pos', 0.1), ('noise_pos', 1), ('marker_init', 0.365872417), ('shape', 'flat'), ('shape_order', 'curv_flat'), ('div_pos', 0.0), ('target_pos', 0.1), ('subj_C0F1_val', 'rew'), ('subj_C1F0_val', 'pen'), ('target_file', 'input_data/stims/Shape_2.50_1.00.png'), ('img1_file', 'input_data/stims/Shape_0.00_1.00.png'), ('img2_file', 'input_data/stims/Shape_4.00_1.00.png')]),
      OrderedDict([('blockN', 2), ('run', 1), ('condition', 'rew_comp'), ('trial_key', 0), ('stim_file_pos', 0), ('stim_pos', 0.1), ('noise_pos', 1), ('marker_init', -0.006275271), ('shape', 'flat'), ('shape_order', 'curv_flat'), ('div_pos', 0.2), ('target_pos', 0.1), ('subj_C0F1_val', 'pen'), ('subj_C1F0_val', 'rew'), ('target_file', 'input_data/stims/Shape_2.50_1.00.png'), ('img1_file', 'input_data/stims/Shape_0.00_1.00.png'), ('img2_file', 'input_data/stims/Shape_4.00_1.00.png')]),
      OrderedDict([('blockN', 3), ('run', 1), ('condition', 'baseline'), ('trial_key', 0), ('stim_file_pos', 0), ('stim_pos', -0.1), ('noise_pos', 3), ('marker_init', 0.006275271), ('shape', 'flat'), ('shape_order', 'flat_curv'), ('div_pos', 0.0), ('target_pos', -0.1), ('subj_C0F1_val', 'rew'), ('subj_C1F0_val', 'pen'), ('target_file', 'input_data/stims/Shape_1.50_1.00.png'), ('img1_file', 'input_data/stims/Shape_4.00_3.00.png'), ('img2_file', 'input_data/stims/Shape_0.00_3.00.png')]),
      OrderedDict([('blockN', 4), ('run', 1), ('condition', 'pen_comp'), ('trial_key', 0), ('stim_file_pos', 0), ('stim_pos', -0.1), ('noise_pos', 3), ('marker_init', 0.365872417), ('shape', 'flat'), ('shape_order', 'flat_curv'), ('div_pos', -0.2), ('target_pos', -0.1), ('subj_C0F1_val', 'pen'), ('subj_C1F0_val', 'rew'), ('target_file', 'input_data/stims/Shape_1.50_1.00.png'), ('img1_file', 'input_data/stims/Shape_4.00_3.00.png'), ('img2_file', 'input_data/stims/Shape_0.00_3.00.png')])]
    Routine baseline
    Routine stim
    Routine delay
    Routine task
    Routine feedback
  LoopTerminator trials
