PsychoPy2experiment version="2024.2.4"
Settings
  Data filename = u'results/%s_subj%s_order%s_%s' % (expName, expInfo['subj'], expInfo['sess_type'], expInfo['date'])
  Experiment info = {'subj': '', 'sess_type': 'A or B or C or D'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = asymmetry_v10
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine new_block
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    CodeComponent block_start_code
      Code Type = Auto->JS
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      Before Experiment:
        import random, numpy as np
      Begin Experiment:
        block_outcome, block_bonus = 0, 0
        sess_type_file = f'input_data/sess_type{expInfo["sess_type"]}.csv'
      Begin Routine:
        block_outcome, block_bonus = 0, 0
        block_start_txt = f'Press enter to begin block {blockN}'

        trial_rows = [i + (blockN-1) * 40 for i in range(40)]
    TextComponent block_start_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_start_txt
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    KeyboardComponent block_start_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stim
    RoutineSettingsComponent stim
      stopVal [duration (s)] = 1
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    CodeComponent load_stim
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        print(target_file)
        target_stim.setImage('/Users/f0064z8/Library/CloudStorage/GoogleDrive-si2442@columbia.edu/My Drive/research/asymmetry_design/'+target_file)
    ImageComponent target_stim
      image [set during: ITI.ISI1] = $target_file
      size = .6,.6
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent debug_stim
      disabled = True
      letterHeight = 0.03
      pos [set every frame] = 0,-.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine delay
    RoutineSettingsComponent delay
      stopVal [duration (s)] = 1.5
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    StaticComponent ISI2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine task
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    CodeComponent rand_divider_slider
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy.hardware import keyboard
        kb = keyboard.Keyboard()
      Begin Experiment:
        leftPressed, rightPressed, sliderMoved = .0, .0, .0
        positions = []
        debug_task_txt = ''
      Begin Routine:
        leftPressed, rightPressed, sliderMoved = .0, .0, .0
        positions = []
        debug_task_txt = f'Trial {trial_key+1}'

        kb.clearEvents()
      Each Frame:
        # for some reason psychopy doesnt remember this assignment
        if slider.markerPos == None:
        #    kb.clearEvents()
            slider.markerPos = anchor

        #if (not leftPressed and kb.getKeys(['left'], waitRelease=False, clear=False))\
        #or (leftPressed and not kb.getKeys(['left'], waitRelease=True, clear=False)):
        #    leftPressed, sliderMoved = 1, 1
        #    print(kb.getKeys(['left'], waitRelease=False, clear=False))
        #    print(leftPressed)
        #    if slider.markerPos >= (-.4 + .01):
        #        slider.markerPos -= 0.01
        #elif not leftPressed or kb.getKeys(['left'], waitRelease=True, clear=True):
        #    leftPressed = 0
        #
        #if (not rightPressed and kb.getKeys(['right'], waitRelease=False, clear=False))\
        #or (rightPressed and not kb.getKeys(['right'], waitRelease=True, clear=False)):
        #    rightPressed, sliderMoved = 1, 1
        #    if slider.markerPos <= (.4 - .01):
        #        slider.markerPos += 0.01
        #elif not rightPressed or kb.getKeys(['right'], waitRelease=True, clear=True):
        #    rightPressed = 0
        #

        #if (not leftPressed and kb.getKeys(['left'], waitRelease=False, clear=False)) or leftPressed:
        #    leftPressed, sliderMoved = 1, 1
        #    if slider.markerPos >= (-.4 + .01):
        #        slider.markerPos -= 0.01
        #elif kb.getKeys(['left'], waitRelease=True, clear=True):
        #    leftPressed = 0
        #else:
        #    print('left released')
        #
        #if (not rightPressed and kb.getKeys(['right'], waitRelease=False, clear=False)) or rightPressed:
        #    rightPressed, sliderMoved = 1, 1
        #    if slider.markerPos <= (.4 - .01):
        #        slider.markerPos += 0.01
        #elif kb.getKeys(['right'], waitRelease=True, clear=True):
        #    rightPressed = 0


        if kb.getKeys(['left'], waitRelease=True, clear=True): # registers release
            leftPressed = 0
        elif kb.getKeys(['left'], waitRelease=False, clear=True): # registers click
            leftPressed, sliderMoved = 1, 1
        else:
            if slider.markerPos >= (-.4 + .01):
                slider.markerPos -= 0.01

        if kb.getKeys(['right'], waitRelease=True, clear=True): # registers release
            rightPressed = 0
        #else:
        #    rightPressed, sliderMoved = 1, 1
        #    if slider.markerPos <= (.4 - .01):
        #        slider.markerPos += 0.01

        positions.append(slider.markerPos)

        # check psychopy_notes for link
      End Routine:
        thisExp.addData('positions', positions)
        kb.clearEvents()
    ImageComponent img1
      image [set during: delay.ISI2] = $img1_file
      pos = -.6, 0
      size = .45,.45
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    ImageComponent img2
      image [set during: delay.ISI2] = $img2_file
      pos = .6, 0
      size = .45,.45
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    PolygonComponent divider_line
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 5
      ori = 90
      pos [set every repeat] = $disp_div, 0
      shape = line
      size = .2,0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    PolygonComponent slider_line
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 5
      pos = 0, 0
      shape = line
      size = .8,.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    SliderComponent slider
      fillColor = 1.0000, -.5000, 1.0000
      forceEndRoutine = False
      granularity = .001
      letterHeight = 0.05
      pos = 0,0
      size = .8,.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      styleTweaks = ('labels45',)
      styles = slider
      ticks = (-.4,-.3,-.2,-.1,.0,.1,.2,.3,.4)
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    KeyboardComponent slider_resp
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      store = all keys
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    KeyboardComponent submit_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent debug_task_text
      disabled = True
      letterHeight = 0.03
      pos [set every frame] = 0,-.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $debug_task_txt
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  Routine feedback
    RoutineSettingsComponent feedback
      stopVal [duration (s)] = 1
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Experiment:
        correct, outcome = .0, .0
      Begin Routine:
        # C0F1 = Curve penalty, Flat reward
        # stimVal comes from file which depends on experimenter input
        valence = val_C0F1 if stimVal == 'val_C0F1' else val_C1F0

        no_resp_txt = ''
        coinLR, coinM, crossLR, crossM = 0, 0, 0, 0
        correct, outcome = 0, 0

        if sliderMoved and not submit_resp.keys == None and 'return' in submit_resp.keys:

            if (slider.markerPos >= disp_div and target_pos >= disp_div)\
            or (slider.markerPos <= disp_div and target_pos <= disp_div):

                correct = 1
                outcome = 2 if valence == 'rew' else 1
                if outcome == 2:
                    coinLR = 1
                elif outcome == 1:
                    coinM = 1

            else:

                correct = -1
                outcome = -1 if valence == 'rew' else -2
                if outcome == -2:
                    coinLR, crossLR = 1, 1
                elif outcome == -1:
                    coinM, crossM = 1, 1

            block_outcome += outcome
            bonus = 1 - (target_pos - slider.markerPos)**2
            block_bonus += bonus

        elif not sliderMoved:
            no_resp_txt = 'You must move the slider!'

        else:
            no_resp_txt = 'Respond faster!'
      Each Frame:
        #Lcoin.setAutoDraw(bool(coinLR))
        #Rcoin.setAutoDraw(bool(coinLR))
        #Mcoin.setAutoDraw(bool(coinM))
        #Lcross.setAutoDraw(bool(crossLR))
        #Rcross.setAutoDraw(bool(crossLR))
        #Mcross.setAutoDraw(bool(crossM))
      End Routine:
        thisExp.addData('correct', correct)
        thisExp.addData('outcome', outcome)
        thisExp.addData('trial_key', trial_key)
    TextComponent no_resp_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = 0,0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $no_resp_txt
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    ImageComponent Lcoin
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/coin.png
      pos = -.2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinLR
      stopVal [duration (s)] = 1
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    ImageComponent Rcoin
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/coin.png
      pos = .2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinLR
      stopVal [duration (s)] = 1
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    ImageComponent Mcoin
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/coin.png
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinM
      stopVal [duration (s)] = 1
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    ImageComponent Lcross
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/cross.png
      pos = -.2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = crossLR
      stopVal [duration (s)] = 1
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    ImageComponent Rcross
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/cross.png
      pos = .2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = crossLR
      stopVal [duration (s)] = 1
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    ImageComponent Mcross
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/cross.png
      size = .3,.3
      startEstim = 0
      startVal [condition] = $crossM
      stopVal [duration (s)] = 1
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  Routine end_block
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    CodeComponent block_end_code
      Code Type = Auto->JS
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      Begin Routine:
        txt1 = f'You gained {block_outcome} big coins,\nand a bonus of {int(np.ceil(block_bonus))} small coins'
        txt2 = 'Press enter to begin next block'

        block_end_txt = txt1 + '\n' + txt2
      End Routine:
        thisExp.addData('block_outcome', block_outcome)
        thisExp.addData('block_bonus', block_bonus)
    TextComponent block_end_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_end_txt
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    KeyboardComponent block_end_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
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    StaticComponent ISI1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $sess_type_file
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('blockN', 1)]),
      OrderedDict([('blockN', 2)]),
      OrderedDict([('blockN', 3)]),
      OrderedDict([('blockN', 4)]),
      OrderedDict([('blockN', 5)]),
      OrderedDict([('blockN', 6)])]
    Routine new_block
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $trial_rows
      conditionsFile = input_data/trials.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('blockN', 1), ('run', 1), ('div', 0.0), ('trial_key', 0), ('stim_pos', 0.1), ('noise_pos', 0), ('val_C0F1', 'pen'), ('val_C1F0', 'rew'), ('valence_disp', 'pen_rew'), ('target_pos', -0.38), ('target_file', 'input_data/stims/Shape_0.10_0.00.png'), ('disp_div', 0.0), ('anchor', -0.185960941), ('img1_file', 'input_data/stims/Shape_0.00_0.00.png'), ('img2_file', 'input_data/stims/Shape_4.00_0.00.png')]),
        OrderedDict([('blockN', 1), ('run', 1), ('div', 0.0), ('trial_key', 1), ('stim_pos', 0.1), ('noise_pos', 4), ('val_C0F1', 'pen'), ('val_C1F0', 'rew'), ('valence_disp', 'rew_pen'), ('target_pos', 0.38), ('target_file', 'input_data/stims/Shape_0.10_4.00.png'), ('disp_div', 0.0), ('anchor', 0.215087129), ('img1_file', 'input_data/stims/Shape_4.00_4.00.png'), ('img2_file', 'input_data/stims/Shape_0.00_4.00.png')]),
        OrderedDict([('blockN', 1), ('run', 1), ('div', 0.0), ('trial_key', 2), ('stim_pos', 0.3), ('noise_pos', 0), ('val_C0F1', 'pen'), ('val_C1F0', 'rew'), ('valence_disp', 'pen_rew'), ('target_pos', -0.34), ('target_file', 'input_data/stims/Shape_0.30_0.00.png'), ('disp_div', 0.0), ('anchor', -0.073620648), ('img1_file', 'input_data/stims/Shape_0.00_0.00.png'), ('img2_file', 'input_data/stims/Shape_4.00_0.00.png')]),
        OrderedDict([('blockN', 1), ('run', 1), ('div', 0.0), ('trial_key', 3), ('stim_pos', 0.3), ('noise_pos', 4), ('val_C0F1', 'pen'), ('val_C1F0', 'rew'), ('valence_disp', 'rew_pen'), ('target_pos', 0.34), ('target_file', 'input_data/stims/Shape_0.30_4.00.png'), ('disp_div', 0.0), ('anchor', 0.071757057), ('img1_file', 'input_data/stims/Shape_4.00_4.00.png'), ('img2_file', 'input_data/stims/Shape_0.00_4.00.png')])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
      Routine ITI
      Routine stim
      Routine delay
      Routine task
      Routine feedback
    LoopTerminator trials
    Routine end_block
  LoopTerminator blocks
