PsychoPy2experiment version="2024.2.4"
Settings
  Data filename = u'results/%s_%s_%s' % (expName, expInfo['subj'], expInfo['date'])
  Experiment info = {'subj': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = asymmetry_v7
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine new_block
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    CodeComponent block_start_code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        Nblock, block_cum_rew = 0, 0
      Begin Routine:
        Nblock += 1
        block_cum_rew = 0
        block_start_txt.text = f'Press return to begin block {Nblock}'
    TextComponent block_start_txt
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent block_start_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine shape_stim
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    CodeComponent rand_stim
      Code Type = Auto->JS
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      Begin Experiment:
        # Generates 0.0, 0.1, ..., 5.0
        values = [round(i * 0.10, 1) for i in range(51)]

        stim_pos, stim_file_pos, context = .0, .0, ''
        stim_file, debug_stim_txt = '',  ''

        trial_num = 0
      Begin Routine:
        from scipy.stats import truncnorm

        # 1. Sample from truncated normal
        trial_num += 1

        import numpy as np

        ## 1. sample position
        if np.random.rand() < 0.5:
            stim_pos = np.random.uniform(max(-.4, divider-.4), divider)
        else:
            stim_pos = np.random.uniform(min(divider+.4, .4), divider)

        # 2. norm to [.0, 4.0], even decimals, total 26
        stim_file_pos = (stim_pos - -.4) / (.8) * (4.0)
        stim_file_pos = round(stim_file_pos, 1)
        # round up to nearest even decimal
        #stim_file_pos = np.ceil(stim_file_pos * 10 / 2) * 2 / 10
        stim_file = f'stims/white_pngs/Shape_{stim_file_pos}0_2.50.png'

        # debugging
        stim_tst = (stim_pos + .4) / .8
        stim_file_tst = stim_file_pos / 4.0
        debug_stim_txt = f'{stim_tst:.2f} = {stim_file_tst:.2f}'

        # 3.
        context = 'pen' if stim_pos <= divider else 'rew'
      End Routine:
        thisExp.addData('stim_pos', stim_pos)
        thisExp.addData('stim_file_pos', stim_file_pos)
        thisExp.addData('context', context)
    ImageComponent stim
      image [set every repeat] = $stim_file
      size = .6,.6
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    TextComponent trial_txt
      color = -1.0000, .5, -1.0000
      disabled = True
      letterHeight = 0.05
      pos = 0,.3
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text = Next shape
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    TextComponent debug_stim
      disabled = True
      letterHeight = 0.03
      pos [set every frame] = 0,-.2
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $debug_stim_txt
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  Routine task
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    CodeComponent rand_divider_slider
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy.hardware import keyboard
        kb = keyboard.Keyboard()
      Begin Experiment:
        # vars that get used in GUI
        (
        pen_center, rew_center,
        disp_divider, anchor,
        leftPressed, rightPressed, sliderMoved,
        ) = (.0, .0, .0, .0, .0, .0, .0)

        debug_task_txt = ''
        colors, positions = [], []

        img_file1, img_file2 = '', ''
      Begin Routine:
        sliderMoved = 0

        # slider order display randomly across trial
        disp_order = random.choice(['pen_rew', 'rew_pen'])

        # compute display positions for PsychoPy components
        if disp_order == 'pen_rew':

            img1_file, img2_file =\
            (f'stims/white_pngs/Shape_0.00_2.50.png',
            f'stims/white_pngs/Shape_4.00_2.50.png')

            target, disp_divider = stim_pos, divider
            pen_center, rew_center = (-.4 + disp_divider)/2, (disp_divider + .4)/2

        else:

            img2_file, img1_file =\
            (f'stims/white_pngs/Shape_0.00_2.50.png',
            f'stims/white_pngs/Shape_4.00_2.50.png')

            # reverse slider
            target, disp_divider = -stim_pos, -divider
            rew_center, pen_center = (-.4 + disp_divider)/2, (disp_divider + .4)/2

        # slider goes from -.4 to .4
        anchor = random.uniform(-.4,.4)
        while target - .05 <= anchor <= target + .05:
            anchor = random.uniform(-.4,.4)

        positions = []
        #debug_task_txt = f'Trial {thisTrialN+1}'
        #debug_task_txt = f'disp_order: {disp_order}, divider: {divider}, disp_divider: {disp_divider}, pen_center: {pen_center}, rew_center: {rew_center}'

        # to collect responses
        kb.clearEvents()
        leftPressed, rightPressed = .0, .0
      Each Frame:
        # for some reason psychopy doesnt remember this assignment
        if slider.markerPos == None:
            slider.markerPos = anchor

        if (not leftPressed and kb.getKeys(['left'], waitRelease=False, clear=False))\
        or (leftPressed and not kb.getKeys(['left'], waitRelease=True, clear=False)):
            leftPressed, sliderMoved = 1, 1
            if slider.markerPos >= -.39:
                slider.markerPos -= 0.01
        elif not leftPressed or kb.getKeys(['left'], waitRelease=True, clear=True):
            leftPressed = 0

        if (not rightPressed and kb.getKeys(['right'], waitRelease=False, clear=False))\
        or (rightPressed and not kb.getKeys(['right'], waitRelease=True, clear=False)):
            rightPressed, sliderMoved = 1, 1
            if slider.markerPos <= .39:
                slider.markerPos += 0.01
        elif not rightPressed or kb.getKeys(['right'], waitRelease=True, clear=True):
            rightPressed = 0

        positions.append(slider.markerPos)

        ################################## debugging
        if (slider.markerPos >= disp_divider and target >= disp_divider)\
        or (slider.markerPos <= disp_divider and target <= disp_divider):
            correct = 1
            outcome = 2 if context == 'rew' else 1

            error = abs(target - slider.markerPos)
            addn_pts = 1 - 1.5 * error

        else:
            correct = -1
            outcome = -1 if context == 'rew' else -2
            error = abs(target - slider.markerPos)
            addn_pts = - 1.5 * error

        net_reward = outcome + addn_pts

        ################################## end of debugging

        debug_task_txt  = f'{addn_pts:.03f}'
        #debug_task_txt = f'target {target:.3f}, slider_pos: {slider.markerPos:.3f}, correct: {correct}, context: {context}, outcome: {outcome:.2f}, addn_pts: {addn_pts:.2f}'

        # check psychopy_notes for link
      End Routine:
        thisExp.addData('divider', divider)

        thisExp.addData('disp_order', disp_order)
        thisExp.addData('disp_divider', disp_divider)
        thisExp.addData('target', target)
        thisExp.addData('anchor', anchor)

        thisExp.addData('positions', positions)
    ImageComponent img1
      image [set every repeat] = $img1_file
      pos [set every repeat] = -.6, 0
      size = .6,.6
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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    ImageComponent img2
      image [set every repeat] = $img2_file
      pos [set every repeat] = .6, 0
      size = .6,.6
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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    PolygonComponent divider_line
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 5
      ori = 90
      pos [set every repeat] = $disp_divider, 0
      shape = line
      size = .2,0
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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    PolygonComponent slider_line
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 5
      pos = 0, 0
      shape = line
      size = .8,.0
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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    SliderComponent slider
      fillColor = 1.0000, -.5000, 1.0000
      forceEndRoutine = False
      granularity = .001
      letterHeight = 0.05
      pos = 0,0
      size = .8,.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      styleTweaks = ('labels45',)
      styles = slider
      ticks = (-.4,-.3,-.2,-.1,.0,.1,.2,.3,.4)
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    KeyboardComponent slider_resp
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      store = all keys
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    KeyboardComponent submit_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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    TextComponent debug_task
      disabled = True
      letterHeight = 0.03
      pos [set every frame] = 0,-.2
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      text [set every frame] = $debug_task_txt
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    PolygonComponent debug_target
      disabled = True
      fillColor = -1.0000, .5, -1.0000
      lineColor = -1.0000, .5, -1.0000
      ori = 90
      pos [set every repeat] = $target, 0
      shape = line
      size = .1,0
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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  Routine feedback
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Experiment:
        correct, outcome, addn_pts, net_reward = .0, .0, .0, .0
      Begin Routine:
        # default txt
        neutr_txt, pen_txt, rew_txt = '', '', ''
        pen_addn_txt, rew_addn_txt = '', ''

        if sliderMoved and not submit_resp.keys == None and 'return' in submit_resp.keys:

            if (slider.markerPos >= disp_divider and target >= disp_divider)\
            or (slider.markerPos <= disp_divider and target <= disp_divider):
                correct = 1
                outcome = 3 if context == 'rew' else 1
                error = abs(target - slider.markerPos)
                addn_pts = 1 - 1.5 * error
                if error <= .05:
                    rew_addn_txt = 'Very close!'
                elif error > .1:
                    rew_addn_txt = 'Get closer!'

                rew_txt = f'{outcome}'

            else:
                correct = -1
                outcome = -1 if context == 'rew' else -3
                error = abs(target - slider.markerPos)
                addn_pts = - 1.5 * error
                if error <= .1:
                    pen_addn_txt = 'Very close!'
                elif error > .15:
                    pen_addn_txt = 'Get closer!'

                pen_txt = f'{outcome}'

            net_reward = outcome + addn_pts
            block_cum_rew += net_reward

        elif not sliderMoved:
            neutr_txt = 'You must move the slider!'

        else:
            neutr_txt = 'Respond faster!'
      End Routine:
        thisExp.addData('correct', correct)
        thisExp.addData('outcome', outcome)
        thisExp.addData('addn_pts', addn_pts)
        thisExp.addData('net_reward', net_reward)
        thisExp.addData('block_cum_rew', block_cum_rew)
    TextComponent no_resp_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = 0,0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $neutr_txt
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    TextComponent pen_text
      color = 1.0000, 0.0000, 0.0000
      letterHeight = 0.05
      pos = 0,0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $pen_txt
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    TextComponent pen_addn_text
      color = 1.0000, 0.0000, 0.0000
      letterHeight = 0.03
      pos = 0,-.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $pen_addn_txt
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    TextComponent rew_text
      color = 0.0000, 1.0000, 0.0000
      letterHeight = 0.05
      pos = 0,0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $rew_txt
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    TextComponent rew_addn_text
      color = 0.0000, 1.0000, 0.0000
      letterHeight = 0.03
      pos = 0,-.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $rew_addn_txt
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  Routine end_block
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    CodeComponent block_end_code
      Code Type = Auto->JS
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      Begin Routine:
        block_cum_rew_txt = f'Your total reward on this block\n{block_cum_rew:.02f}'
    TextComponent block_end_txt
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $block_cum_rew_txt
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks.csv
    isTrials = False
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('block', 1), ('divider', -0.2)]),
      OrderedDict([('block', 2), ('divider', 0.2)]),
      OrderedDict([('block', 3), ('divider', 0.0)])]
    Routine new_block
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 50
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      conditions:
        [{'shapeVertices': [(0, 0.2), (-0.2, -0.2), (0.2, -0.2)]},
        {'shapeVertices': [(0, 0.2), (-0.2, -0.2), (0.2, -0.2)]}]
      Routine shape_stim
      Routine task
      Routine feedback
    LoopTerminator trials
    Routine end_block
  LoopTerminator blocks
