PsychoPy2experiment version="2024.2.4"
Settings
  Data filename = u'results/%s_%s_%s' % (expName, expInfo['subj'], expInfo['date'])
  Experiment info = {'subj': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = asymmetry_v8
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine new_block
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    CodeComponent block_start_code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        block_outcome, block_bonus = 0, 0
      Begin Routine:
        block_outcome, block_bonus = 0, 0
        block_start_txt.text = f'Press space to begin block {thisN+1}'
    TextComponent block_start_txt
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent block_start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine shape_stim
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    CodeComponent rand_stim
      Code Type = Auto->JS
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      Begin Experiment:
        stim_disp_pos, stim_pos, noise_pos = .0 , .0, .0
        context = ''
        stim_file, debug_stim_txt = '',  ''
      Begin Routine:
        import numpy as np

        ## 1. sample position
        if np.random.rand() < 0.5:
            stim_disp_pos = np.random.uniform(max(-.4, divider-.4), divider)
        else:
            stim_disp_pos = np.random.uniform(min(divider+.4, .4), divider)

        # 2. norm to [.0, 4.0]
        stim_pos = round( (stim_disp_pos - -.4) / (.8) * (4.0)
                        , 1)

        ## add noise
        noise_pos = np.random.choice([0.5, 4.5])
        stim_file = f'stims/white_pngs/Shape_{stim_pos}0_{noise_pos}0.png'

        #debug_stim_txt = ''

        # 3.
        context = 'pen' if stim_pos <= divider else 'rew'
      End Routine:
        thisExp.addData('stim_pos', stim_pos)
        thisExp.addData('noise_pos', noise_pos)
        thisExp.addData('context', context)
    ImageComponent stim
      image [set every repeat] = $stim_file
      size = .6,.6
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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    TextComponent debug_stim
      disabled = True
      letterHeight = 0.03
      pos [set every frame] = 0,-.2
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $debug_stim_txt
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  Routine task
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    CodeComponent rand_divider_slider
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy.hardware import keyboard
        kb = keyboard.Keyboard()
      Begin Experiment:
        # vars that get used in GUI
        (
        disp_divider, anchor,
        leftPressed, rightPressed, sliderMoved,
        ) = (.0, .0, .0, .0, .0)

        debug_task_txt = ''
        positions = []

        img_file1, img_file2 = '', ''
      Begin Routine:
        sliderMoved = 0

        # slider order display randomly across trial
        disp_order = random.choice(['pen_rew', 'rew_pen'])

        # compute display positions for PsychoPy components
        if disp_order == 'pen_rew':

            img1_file, img2_file =\
            (f'stims/white_pngs/Shape_0.00_2.50.png',
            f'stims/white_pngs/Shape_4.00_2.50.png')

            target, disp_divider = stim_disp_pos, divider

        else:

            img2_file, img1_file =\
            (f'stims/white_pngs/Shape_0.00_2.50.png',
            f'stims/white_pngs/Shape_4.00_2.50.png')

            # reverse slider
            target, disp_divider = -stim_disp_pos, -divider

        # slider goes from -.4 to .4
        anchor = random.uniform(-.4,.4)
        while target - .05 <= anchor <= target + .05 or\
              abs(target-anchor) > .3:
             # either too close or far
            anchor = random.uniform(-.4,.4)

        positions = []
        #debug_task_txt = f'Trial {thisTrialN+1}'

        # to collect responses
        kb.clearEvents()
        leftPressed, rightPressed = .0, .0
      Each Frame:
        # for some reason psychopy doesnt remember this assignment
        if slider.markerPos == None:
            slider.markerPos = anchor

        if (not leftPressed and kb.getKeys(['left'], waitRelease=False, clear=False))\
        or (leftPressed and not kb.getKeys(['left'], waitRelease=True, clear=False)):
            leftPressed, sliderMoved = 1, 1
            if slider.markerPos >= -.39:
                slider.markerPos -= 0.01
        elif not leftPressed or kb.getKeys(['left'], waitRelease=True, clear=True):
            leftPressed = 0

        if (not rightPressed and kb.getKeys(['right'], waitRelease=False, clear=False))\
        or (rightPressed and not kb.getKeys(['right'], waitRelease=True, clear=False)):
            rightPressed, sliderMoved = 1, 1
            if slider.markerPos <= .39:
                slider.markerPos += 0.01
        elif not rightPressed or kb.getKeys(['right'], waitRelease=True, clear=True):
            rightPressed = 0

        positions.append(slider.markerPos)

        # check psychopy_notes for link

        ################################## debugging
        #if (slider.markerPos >= disp_divider and target >= disp_divider)\
        #or (slider.markerPos <= disp_divider and target <= disp_divider):
        #    correct = 1
        #    outcome = 2 if context == 'rew' else 1
        #
        #    error = abs(target - slider.markerPos)
        #    addn_pts = 1 - 1.5 * error
        #
        #else:
        #    correct = -1
        #    outcome = -1 if context == 'rew' else -2
        #    error = abs(target - slider.markerPos)
        #    addn_pts = - 1.5 * error
        #
        #net_reward = outcome + addn_pts
        #
        #debug_task_txt  = f'{addn_pts:.03f}'

        ################################## end of debugging
      End Routine:
        thisExp.addData('divider', divider)

        thisExp.addData('disp_order', disp_order)
        thisExp.addData('disp_divider', disp_divider)
        thisExp.addData('target', target)
        thisExp.addData('anchor', anchor)

        thisExp.addData('positions', positions)
    ImageComponent img1
      image [set every repeat] = $img1_file
      pos [set every repeat] = -.6, 0
      size = .6,.6
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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    ImageComponent img2
      image [set every repeat] = $img2_file
      pos [set every repeat] = .6, 0
      size = .6,.6
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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    PolygonComponent divider_line
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 5
      ori = 90
      pos [set every repeat] = $disp_divider, 0
      shape = line
      size = .2,0
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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    PolygonComponent slider_line
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 5
      pos = 0, 0
      shape = line
      size = .8,.0
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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    SliderComponent slider
      fillColor = 1.0000, -.5000, 1.0000
      forceEndRoutine = False
      granularity = .001
      letterHeight = 0.05
      pos = 0,0
      size = .8,.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      styleTweaks = ('labels45',)
      styles = slider
      ticks = (-.4,-.3,-.2,-.1,.0,.1,.2,.3,.4)
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    KeyboardComponent slider_resp
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      store = all keys
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    KeyboardComponent submit_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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    TextComponent debug_task
      disabled = True
      letterHeight = 0.03
      pos [set every frame] = 0,-.2
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
      text [set every frame] = $debug_task_txt
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    PolygonComponent debug_target
      disabled = True
      fillColor = -1.0000, .5, -1.0000
      lineColor = -1.0000, .5, -1.0000
      ori = 90
      pos [set every repeat] = $target, 0
      shape = line
      size = .1,0
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3
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  Routine feedback
    RoutineSettingsComponent feedback
      stopVal [duration (s)] = 1
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Experiment:
        correct, outcome = .0, .0
      Begin Routine:
        no_resp_txt, bonus_txt = '', ''
        coinLR, coinM, crossLR, crossM = 0, 0, 0, 0
        correct, outcome = 0, 0

        if sliderMoved and not submit_resp.keys == None and 'space' in submit_resp.keys:

            if (slider.markerPos >= disp_divider and target >= disp_divider)\
            or (slider.markerPos <= disp_divider and target <= disp_divider):

                correct = 1
                outcome = 2 if context == 'rew' else 1
                if outcome == 2:
                    coinLR = 1
                elif outcome == 1:
                    coinM = 1

                if abs(target - slider.markerPos) < .1:
                    bonus_txt = 'High bonus!'

            else:
                correct = -1
                outcome = -1 if context == 'rew' else -2
                if outcome == -2:
                    coinLR, crossLR = 1, 1
                elif outcome == -1:
                    coinM, crossM = 1, 1

            block_outcome += outcome
            bonus = 1 - (target - slider.markerPos)**2
            block_bonus += bonus

        elif not sliderMoved:
            no_resp_txt = 'You must move the slider!'

        else:
            no_resp_txt = 'Respond faster!'
      End Routine:
        thisExp.addData('correct', correct)
        thisExp.addData('outcome', outcome)
    TextComponent no_resp_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = 0,0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $no_resp_txt
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    TextComponent bonus_text
      color = -1.0000, 0.5000, -1.0000
      letterHeight = 0.05
      pos = 0,-.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $bonus_txt
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    ImageComponent Lcoin
      durationEstim = 1
      image [set every repeat] = stims/coin.jpg
      pos = -.2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinLR
      stopVal [duration (s)] = 1
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    ImageComponent Rcoin
      durationEstim = 1
      image [set every repeat] = stims/coin.jpg
      pos = .2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinLR
      stopVal [duration (s)] = 1
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    ImageComponent Mcoin
      durationEstim = 1
      image [set every repeat] = stims/coin.jpg
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinM
      stopVal [duration (s)] = 1
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    ImageComponent Lcross
      durationEstim = 1
      image [set every repeat] = stims/cross.jpg
      pos = -.2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $crossLR
      stopVal [duration (s)] = 1
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    ImageComponent Rcross
      durationEstim = 1
      image [set every repeat] = stims/cross.jpg
      pos = .2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $crossLR
      stopVal [duration (s)] = 1
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    ImageComponent Mcross
      durationEstim = 1
      image [set every repeat] = stims/cross.jpg
      size = .3,.3
      startEstim = 0
      startVal [condition] = $crossM
      stopVal [duration (s)] = 1
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  Routine end_block
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    CodeComponent block_end_code
      Code Type = Auto->JS
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      Begin Routine:
        block_end_txt = f'You gained {block_outcome} big coins,\nand a bonus of {int(np.ceil(block_bonus))} small coins'
      End Routine:
        thisExp.addData('block_outcome', block_outcome)
        thisExp.addData('block_bonus', block_bonus)
    TextComponent block_end_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $block_end_txt
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks2.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 1), ('divider', 0.0)]),
      OrderedDict([('block', 2), ('divider', -0.2)]),
      OrderedDict([('block', 3), ('divider', 0.2)]),
      OrderedDict([('block', 4), ('divider', 0.0)]),
      OrderedDict([('block', 5), ('divider', 0.2)]),
      OrderedDict([('block', 6), ('divider', -0.2)])]
    Routine new_block
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 40
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      conditions:
        [{'shapeVertices': [(0, 0.2), (-0.2, -0.2), (0.2, -0.2)]},
        {'shapeVertices': [(0, 0.2), (-0.2, -0.2), (0.2, -0.2)]}]
      Routine shape_stim
      Routine task
      Routine feedback
    LoopTerminator trials
    Routine end_block
  LoopTerminator blocks
