PsychoPy2experiment version="2024.2.4"
Settings
  Data filename = u'results/%s_subj-%s_order-%s_%s' % (expName, expInfo['subj'], expInfo['sess_type'], expInfo['date'])
  Experiment info = {'subj': '', 'sess_type': 'A or B or C or D'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = asymmetry_final
  frameRate = 120
  frameRateMsg = 120
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine block_start
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    CodeComponent block_start_code
      Code Type = Auto->JS
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      Before Experiment:
        import random, numpy as np
      Begin Experiment:
        block_outcome, block_bonus, disp_blockN, block_id = 0, 0, 0, 0

        if expInfo['sess_type'] in ['A','B']:
            block_order = [0,1,2,4,3,5]
        elif expInfo['sess_type'] in ['C','D']:
            block_order = [0,2,1,3,4,5]
      Begin Routine:
        #print('trig10', end=', ')

        block_outcome, block_bonus = 0, 0

        disp_blockN += 1
        block_start_txt = f'Press up arrow to begin block {disp_blockN}'

        trial_rows = [row + (block_order[block_id]) * 40 for row in range(40)]
        block_id += 1
    TextComponent block_start_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [frame N] = 0.0
      text [set every repeat] = $block_start_txt
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    KeyboardComponent block_start_resp
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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  Routine baseline
    RoutineSettingsComponent baseline
      durationEstim = 1
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    StaticComponent ISI1
      durationEstim = 1
      startVal [frame N] = 0
      stopVal [duration (frames)] = $base_dur
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    CodeComponent base_code
      Code Type = Auto->JS
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      Begin Experiment:
        base_dur = 0
      Begin Routine:
        base_dur = (1 + np.random.choice(np.arange(-.1, 0.11, 0.05)) ) * expInfo['frameRate']

        #print('trig20', end=', ')
  Routine stim
    RoutineSettingsComponent stim
      durationEstim = 1
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    CodeComponent stim_code
      Code Type = Auto->JS
      Begin Routine:
        #print('trig30', end=', ')
    ImageComponent target_stim
      durationEstim = 1
      image [set during: baseline.ISI1] = $target_file
      size = .6,.6
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 1*expInfo['frameRate']
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  Routine delay
    RoutineSettingsComponent delay
      durationEstim = 1.5
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    StaticComponent ISI2
      durationEstim = 1.5
      startVal [frame N] = 0
      stopVal [duration (frames)] = $delay_dur
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    CodeComponent delay_code
      Code Type = Auto->JS
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      Begin Experiment:
        delay_dur = 0
      Begin Routine:
        delay_dur = ( 1.4 + np.random.choice(np.arange(-.1, 0.11, 0.05)) ) * expInfo['frameRate']

        #print('trig40', end=', ')
  Routine task
    RoutineSettingsComponent task
      durationEstim = 3
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    CodeComponent task_code
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy.hardware import keyboard
        kb = keyboard.Keyboard()
      Begin Experiment:
        leftPressed, rightPressed, marker_moved = 0, 0, 0
        positions = []
        marker_move = .004
        debug_task_txt = ''
      Begin Routine:
        leftPressed, rightPressed, marker_moved = 0, 0, 0
        positions = []
        thrown = False
        debug_task_txt = f'Trial {trial_key+1}'
        kb.clearEvents()

        #print('trig50', end=', ')
      Each Frame:
        # for some reason psychopy doesnt remember this assignment
        if marker.markerPos == None:
            marker.markerPos = marker_init

        # FYI, by default press & release are false, only temporarily true
        if kb.getKeys(['left'], waitRelease=True, clear=True):
        # released
            leftPressed = 0
        #    print('trig53', end=', ')

        if leftPressed or kb.getKeys(['left'], waitRelease=False, clear=False):
        # pressed
            marker_moved = 1

        #    if marker_moved and not thrown:
        #        thrown = True
        #        print('trig51', end=', ')
        #    if not leftPressed:
        #        print('trig52', end=', ')

            leftPressed = 1
            if (-.4 + marker_move) <= marker.markerPos:
                marker.markerPos -= marker_move

        if kb.getKeys(['right'], waitRelease=True, clear=True):
        # released
            rightPressed = 0
        #    print('trig55', end=', ')

        if rightPressed or kb.getKeys(['right'], waitRelease=False, clear=False):
        # pressed

            marker_moved = 1

        #    if marker_moved and not thrown:
        #        thrown = True
        #        print('trig51', end=', ')
        #    if not rightPressed:
        #        print('trig54', end=', ')

            rightPressed = 1
            if marker.markerPos <= (.4 - marker_move):
                marker.markerPos += marker_move

        positions.append(marker.markerPos)

        #if kb.getKeys(['up'], waitRelease=False, clear=False):
        #    print('trig56', end=', ')
      End Routine:
        thisExp.addData('positions', positions)
        kb.clearEvents()
    ImageComponent img1
      durationEstim = 3
      image [set during: delay.ISI2] = $img1_file
      pos = -.6, 0
      size = .45,.45
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
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    ImageComponent img2
      durationEstim = 3
      image [set during: delay.ISI2] = $img2_file
      pos = .6, 0
      size = .45,.45
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
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    PolygonComponent divider_line
      durationEstim = 3
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 3
      ori = 90
      pos [set every repeat] = $div_pos, 0
      shape = line
      size = .4,0
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
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    PolygonComponent slider_line
      durationEstim = 3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = 0, 0
      shape = line
      size = .8,.0
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
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    SliderComponent marker
      durationEstim = 3
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = .001
      letterHeight = 0.05
      pos = 0,0
      size = .8,.05
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
      styleTweaks = ('labels45',)
      styles = slider
      ticks = (-.4,-.3,-.2,-.1,.0,.1,.2,.3,.4)
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    KeyboardComponent slider_resp
      allowedKeys = 'left','right'
      discard previous = False
      durationEstim = 3
      forceEndRoutine = False
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
      store = all keys
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    KeyboardComponent submit_resp
      allowedKeys = 'up'
      durationEstim = 3
      forceEndRoutine = True
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 3*expInfo['frameRate']
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    TextComponent debug_task
      disabled = True
      durationEstim = 0
      letterHeight = 0.03
      pos [set every frame] = 0,-.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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  Routine anticipation
    RoutineSettingsComponent anticipation
      durationEstim = .25
      stopVal [frame N] = .25*expInfo['frameRate']
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    CodeComponent anticipation_code
      Code Type = Auto->JS
      Begin Routine:
        #print('trig60', end=', ')
    TextComponent anticipation_text
      letterHeight = 0.05
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = .25*expInfo['frameRate']
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  Routine feedback
    RoutineSettingsComponent feedback
      durationEstim = 1
      stopVal [frame N] = 1*expInfo['frameRate']
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Experiment:
        correct, outcome = .0, .0
      Begin Routine:
        #print('trig70', end=', ')

        # C0F1 = Curve penalty, Flat reward
        if expInfo['sess_type'] in ['A','C']:
            valence = subj_C0F1_val
        elif expInfo['sess_type'] in ['B','D']:
            valence = subj_C1F0_val

        no_resp_txt = ''
        coinLR, coinM, crossLR, crossM = 0, 0, 0, 0
        correct, outcome = 0, 0

        if marker_moved and not submit_resp.keys == None and 'up' in submit_resp.keys:

            if (marker.markerPos >= div_pos and target_pos >= div_pos)\
            or (marker.markerPos <= div_pos and target_pos <= div_pos):

                correct = 1
                outcome = 2 if valence == 'rew' else 1
                if outcome == 2:
                    coinLR = 1
                elif outcome == 1:
                    coinM = 1

                if abs(target_pos-marker.markerPos) <= .05:
                    block_bonus += 2

            else:

                correct = 0
                outcome = -1 if valence == 'rew' else -2
                if outcome == -2:
                    coinLR, crossLR = 1, 1
                elif outcome == -1:
                    coinM, crossM = 1, 1

            block_outcome += outcome

        elif not marker_moved:
            no_resp_txt = 'You must move the marker!'

        else:
            no_resp_txt = 'Respond faster!'
      End Routine:
        thisExp.addData('valence', valence)
        thisExp.addData('correct', correct)
        thisExp.addData('outcome', outcome)
        thisExp.addData('trial_key', trial_key)
    TextComponent no_resp_text
      color = 1.0000, 1.0000, 1.0000
      durationEstim = 1
      letterHeight = 0.05
      pos = 0,0
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 1*expInfo['frameRate']
      text [set every repeat] = $no_resp_txt
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    ImageComponent Lcoin
      durationEstim = 1
      image = input_data/coin.png
      pos = -.2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinLR
      stopVal [duration (frames)] = 1*expInfo['frameRate']
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    ImageComponent Rcoin
      durationEstim = 1
      image = input_data/coin.png
      pos = .2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinLR
      stopVal [duration (frames)] = 1*expInfo['frameRate']
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    ImageComponent Mcoin
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/coin.png
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinM
      stopVal [duration (frames)] = 1*expInfo['frameRate']
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    ImageComponent Lcross
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/cross.png
      pos = -.2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = crossLR
      stopVal [duration (frames)] = 1*expInfo['frameRate']
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    ImageComponent Rcross
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/cross.png
      pos = .2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = crossLR
      stopVal [duration (frames)] = 1*expInfo['frameRate']
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    ImageComponent Mcross
      durationEstim = 1
      image [set during: delay.ISI2] = input_data/cross.png
      size = .3,.3
      startEstim = 0
      startVal [condition] = $crossM
      stopVal [duration (frames)] = 1*expInfo['frameRate']
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  Routine block_end
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    CodeComponent block_end_code
      Code Type = Auto->JS
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      Begin Routine:
        txt1 = f'Based on your precision and speed, you gained a bonus of {block_bonus}.\n\n'
        txt2 = 'Press the up arrow to begin next block.'
        block_end_txt = txt1 + txt2

        #print('trig80', end=', ')
      End Routine:
        thisExp.addData('block_outcome', block_outcome)
        thisExp.addData('block_bonus', block_bonus)
    TextComponent block_end_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [frame N] = 0.0
      text [set every repeat] = $block_end_txt
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    KeyboardComponent block_end_resp
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [frame N] = 0.0
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 6
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    conditions:
      [OrderedDict([('blockN', 1)]),
      OrderedDict([('blockN', 2)]),
      OrderedDict([('blockN', 3)]),
      OrderedDict([('blockN', 4)]),
      OrderedDict([('blockN', 5)]),
      OrderedDict([('blockN', 6)])]
    Routine block_start
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $trial_rows
      conditionsFile = input_data/trials.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('blockN', 1), ('run', 1), ('condition', 'baseline'), ('trial_key', 0), ('stim_file_pos', 0.1), ('stim_pos', -0.38), ('noise_pos', 1.0), ('marker_init', -0.344), ('shape', 'curv'), ('shape_order', 'curv_flat'), ('div_pos', 0.0), ('target_pos', -0.38), ('subj_C0F1_val', 'pen'), ('subj_C1F0_val', 'rew'), ('target_file', 'input_data/stims/Shape_0.10_1.00.png'), ('img1_file', 'input_data/stims/Shape_0.00_2.00.png'), ('img2_file', 'input_data/stims/Shape_4.00_2.00.png')]),
        OrderedDict([('blockN', 1), ('run', 1), ('condition', 'baseline'), ('trial_key', 1), ('stim_file_pos', 0.1), ('stim_pos', -0.38), ('noise_pos', 1.0), ('marker_init', -0.184), ('shape', 'curv'), ('shape_order', 'flat_curv'), ('div_pos', 0.0), ('target_pos', 0.38), ('subj_C0F1_val', 'pen'), ('subj_C1F0_val', 'rew'), ('target_file', 'input_data/stims/Shape_0.10_1.00.png'), ('img1_file', 'input_data/stims/Shape_4.00_2.00.png'), ('img2_file', 'input_data/stims/Shape_0.00_2.00.png')]),
        OrderedDict([('blockN', 1), ('run', 1), ('condition', 'baseline'), ('trial_key', 2), ('stim_file_pos', 0.3), ('stim_pos', -0.34), ('noise_pos', 1.0), ('marker_init', 0.252), ('shape', 'curv'), ('shape_order', 'curv_flat'), ('div_pos', 0.0), ('target_pos', -0.34), ('subj_C0F1_val', 'pen'), ('subj_C1F0_val', 'rew'), ('target_file', 'input_data/stims/Shape_0.30_1.00.png'), ('img1_file', 'input_data/stims/Shape_0.00_2.00.png'), ('img2_file', 'input_data/stims/Shape_4.00_2.00.png')]),
        OrderedDict([('blockN', 1), ('run', 1), ('condition', 'baseline'), ('trial_key', 3), ('stim_file_pos', 0.3), ('stim_pos', -0.34), ('noise_pos', 1.0), ('marker_init', 0.248), ('shape', 'curv'), ('shape_order', 'flat_curv'), ('div_pos', 0.0), ('target_pos', 0.34), ('subj_C0F1_val', 'pen'), ('subj_C1F0_val', 'rew'), ('target_file', 'input_data/stims/Shape_0.30_1.00.png'), ('img1_file', 'input_data/stims/Shape_4.00_2.00.png'), ('img2_file', 'input_data/stims/Shape_0.00_2.00.png')])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
      Routine baseline
      Routine stim
      Routine delay
      Routine task
      Routine anticipation
      Routine feedback
    LoopTerminator trials
    Routine block_end
  LoopTerminator blocks
