PsychoPy2experiment version="2024.2.4"
Settings
  Data filename = u'results/%s_subj%s_order%s_%s' % (expName, expInfo['subj'], expInfo['sess_type'], expInfo['date'])
  Experiment info = {'subj': '', 'sess_type': 'A or B or C or D'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = asymmetry_v8
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine new_block
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    CodeComponent block_start_code
      Code Type = Auto->JS
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      Before Experiment:
        import random, numpy as np
      Begin Experiment:
        block_outcome, block_bonus = 0, 0
        #block_file = f'block_order{expInfo["block_order"]}.csv'
        sess_type_file = f'input_data/sess_type{expInfo["sess_type"]}.csv'
      Begin Routine:
        block_outcome, block_bonus = 0, 0
        block_start_txt = f'Press space to begin block {blockN}'

        trial_rows = [i + (blockN-1) * 40 for i in range(40)]
    TextComponent block_start_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_start_txt
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    KeyboardComponent block_start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task
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    CodeComponent rand_divider_slider
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy.hardware import keyboard
        kb = keyboard.Keyboard()
      Begin Experiment:
        leftPressed, rightPressed, sliderMoved = .0, .0, .0
        positions = []
        debug_task_txt = ''
      Begin Routine:
        leftPressed, rightPressed, sliderMoved = .0, .0, .0
        positions = []
        debug_task_txt = f'Trial {trial_key+1}'

        # to collect responses
        kb.clearEvents()
      Each Frame:
        # for some reason psychopy doesnt remember this assignment
        if slider.markerPos == None:
            slider.markerPos = anchor

        if (not leftPressed and kb.getKeys(['left'], waitRelease=False, clear=False))\
        or (leftPressed and not kb.getKeys(['left'], waitRelease=True, clear=False)):
            leftPressed, sliderMoved = 1, 1
            if slider.markerPos >= (-.4 + .01):
                slider.markerPos -= 0.01
        elif not leftPressed or kb.getKeys(['left'], waitRelease=True, clear=True):
            leftPressed = 0

        if (not rightPressed and kb.getKeys(['right'], waitRelease=False, clear=False))\
        or (rightPressed and not kb.getKeys(['right'], waitRelease=True, clear=False)):
            rightPressed, sliderMoved = 1, 1
            if slider.markerPos <= (.4 - .01):
                slider.markerPos += 0.01
        elif not rightPressed or kb.getKeys(['right'], waitRelease=True, clear=True):
            rightPressed = 0

        positions.append(slider.markerPos)

        # check psychopy_notes for link

        ################################## debugging
        #if (slider.markerPos >= disp_divider and target >= disp_divider)\
        #or (slider.markerPos <= disp_divider and target <= disp_divider):
        #    correct = 1
        #    outcome = 2 if context == 'rew' else 1
        #
        #    error = abs(target - slider.markerPos)
        #    addn_pts = 1 - 1.5 * error
        #
        #else:
        #    correct = -1
        #    outcome = -1 if context == 'rew' else -2
        #    error = abs(target - slider.markerPos)
        #    addn_pts = - 1.5 * error
        #
        #net_reward = outcome + addn_pts
        #
        #debug_task_txt  = f'{addn_pts:.03f}'

        ################################## end of debugging
      End Routine:
        thisExp.addData('positions', positions)
    ImageComponent img1
      image [set every repeat] = $img1_file
      pos = -.6, 0
      size = .5,.5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    ImageComponent img2
      image [set every repeat] = $img2_file
      pos = .6, 0
      size = .5,.5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    PolygonComponent divider_line
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 5
      ori = 90
      pos [set every repeat] = $disp_div, 0
      shape = line
      size = .2,0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    PolygonComponent slider_line
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 5
      pos = 0, 0
      shape = line
      size = .8,.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    SliderComponent slider
      fillColor = 1.0000, -.5000, 1.0000
      forceEndRoutine = False
      granularity = .001
      letterHeight = 0.05
      pos = 0,0
      size = .8,.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      styleTweaks = ('labels45',)
      styles = slider
      ticks = (-.4,-.3,-.2,-.1,.0,.1,.2,.3,.4)
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    KeyboardComponent slider_resp
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      store = all keys
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    KeyboardComponent submit_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent debug_task_text
      letterHeight = 0.03
      pos [set every frame] = 0,-.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $debug_task_txt
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  Routine feedback
    RoutineSettingsComponent feedback
      stopVal [duration (s)] = 1
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Experiment:
        correct, outcome = .0, .0
      Begin Routine:
        # C0F1 = Curve penalty, Flat reward
        # stimVal comes from file which depends on experimenter input
        valence = val_C0F1 if stimVal == 'val_C0F1' else val_C1F0

        no_resp_txt = ''
        coinLR, coinM, crossLR, crossM = 0, 0, 0, 0
        correct, outcome = 0, 0

        if sliderMoved and not submit_resp.keys == None and 'space' in submit_resp.keys:

            if (slider.markerPos >= disp_div and target_pos >= disp_div)\
            or (slider.markerPos <= disp_div and target_pos <= disp_div):

                correct = 1
                outcome = 2 if valence == 'rew' else 1
                if outcome == 2:
                    coinLR = 1
                elif outcome == 1:
                    coinM = 1

            else:

                correct = -1
                outcome = -1 if valence == 'rew' else -2
                if outcome == -2:
                    coinLR, crossLR = 1, 1
                elif outcome == -1:
                    coinM, crossM = 1, 1

            block_outcome += outcome
            bonus = 1 - (target_pos - slider.markerPos)**2
            block_bonus += bonus

        elif not sliderMoved:
            no_resp_txt = 'You must move the slider!'

        else:
            no_resp_txt = 'Respond faster!'
      End Routine:
        thisExp.addData('correct', correct)
        thisExp.addData('outcome', outcome)
        thisExp.addData('trial_key', trial_key)
    TextComponent no_resp_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = 0,0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $no_resp_txt
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    ImageComponent Lcoin
      durationEstim = 1
      image [set every repeat] = input_data/stims/coin.png
      pos = -.2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinLR
      stopVal [duration (s)] = 1
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    ImageComponent Rcoin
      durationEstim = 1
      image [set every repeat] = input_data/stims/coin.png
      pos = .2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinLR
      stopVal [duration (s)] = 1
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    ImageComponent Mcoin
      durationEstim = 1
      image [set every repeat] = input_data/stims/coin.png
      size = .3,.3
      startEstim = 0
      startVal [condition] = $coinM
      stopVal [duration (s)] = 1
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    ImageComponent Lcross
      durationEstim = 1
      image [set every repeat] = input_data/stims/cross.png
      pos = -.2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $crossLR
      stopVal [duration (s)] = 1
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    ImageComponent Rcross
      durationEstim = 1
      image [set every repeat] = input_data/stims/cross.png
      pos = .2, 0
      size = .3,.3
      startEstim = 0
      startVal [condition] = $crossLR
      stopVal [duration (s)] = 1
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    ImageComponent Mcross
      durationEstim = 1
      image [set every repeat] = input_data/stims/cross.png
      size = .3,.3
      startEstim = 0
      startVal [condition] = $crossM
      stopVal [duration (s)] = 1
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  Routine end_block
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    CodeComponent block_end_code
      Code Type = Auto->JS
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      Begin Routine:
        block_end_txt = f'You gained {block_outcome} big coins,\nand a bonus of {int(np.ceil(block_bonus))} small coins'
      End Routine:
        thisExp.addData('block_outcome', block_outcome)
        thisExp.addData('block_bonus', block_bonus)
    TextComponent block_end_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $block_end_txt
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  Routine stim
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    ImageComponent targ_pos
      image [set every repeat] = $target_file
      size = .6,.6
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent debug_stim
      disabled = True
      letterHeight = 0.03
      pos [set every frame] = 0,-.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine delay
    RoutineSettingsComponent delay
      stopVal [duration (s)] = 1.5
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  Routine ITI
    RoutineSettingsComponent ITI
      stopVal [duration (s)] = 1
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  Routine select_rows
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        trial_rows = [i + (blockN-1) * 40 for i in range(40)]
Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $sess_type_file
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('blockN', 1)]),
      OrderedDict([('blockN', 2)]),
      OrderedDict([('blockN', 3)]),
      OrderedDict([('blockN', 4)]),
      OrderedDict([('blockN', 5)]),
      OrderedDict([('blockN', 6)])]
    Routine new_block
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $trial_rows
      conditionsFile = input_data/trials.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('blockN', 1), ('run', 1), ('div', 0.0), ('trial_key', 0), ('stim_pos', 0.1), ('noise_pos', 0.0), ('valence', 'pen'), ('valence_disp', 'pen_rew'), ('target_pos', -0.38), ('target_file', '../input_data/stims/white_pngs/Shape_0.10_0.00.png'), ('disp_div', 0.0), ('anchor', -0.2148593472497857), ('img1_file', '../input_data/stims/white_pngs/Shape_0.00_0.00.png'), ('img2_file', '../input_data/stims/white_pngs/Shape_4.00_0.00.png')]),
        OrderedDict([('blockN', 1), ('run', 1), ('div', 0.0), ('trial_key', 1), ('stim_pos', 0.1), ('noise_pos', 4.0), ('valence', 'pen'), ('valence_disp', 'rew_pen'), ('target_pos', 0.38), ('target_file', '../input_data/stims/white_pngs/Shape_0.10_4.00.png'), ('disp_div', 0.0), ('anchor', 0.1578311570595035), ('img1_file', '../input_data/stims/white_pngs/Shape_4.00_4.00.png'), ('img2_file', '../input_data/stims/white_pngs/Shape_0.00_4.00.png')]),
        OrderedDict([('blockN', 1), ('run', 1), ('div', 0.0), ('trial_key', 2), ('stim_pos', 0.3), ('noise_pos', 0.0), ('valence', 'pen'), ('valence_disp', 'pen_rew'), ('target_pos', -0.34), ('target_file', '../input_data/stims/white_pngs/Shape_0.30_0.00.png'), ('disp_div', 0.0), ('anchor', -0.090596934707602), ('img1_file', '../input_data/stims/white_pngs/Shape_0.00_0.00.png'), ('img2_file', '../input_data/stims/white_pngs/Shape_4.00_0.00.png')]),
        OrderedDict([('blockN', 1), ('run', 1), ('div', 0.0), ('trial_key', 3), ('stim_pos', 0.3), ('noise_pos', 4.0), ('valence', 'pen'), ('valence_disp', 'rew_pen'), ('target_pos', 0.34), ('target_file', '../input_data/stims/white_pngs/Shape_0.30_4.00.png'), ('disp_div', 0.0), ('anchor', 0.0408593438469324), ('img1_file', '../input_data/stims/white_pngs/Shape_4.00_4.00.png'), ('img2_file', '../input_data/stims/white_pngs/Shape_0.00_4.00.png')])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
      Routine stim
      Routine delay
      Routine task
      Routine feedback
      Routine ITI
    LoopTerminator trials
    Routine end_block
  LoopTerminator blocks
